PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'first name': '', 'last name': '', 'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920,1080]
  color = white
  expName = Intelligence
  exportHTML = on Save
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trial
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    ImageComponent matrix
      image [set every repeat] = $matrix_image
      pos = (0, 200)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1
      image [set every repeat] = $ans1_image
      pos = (-300, -120)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans2
      image [set every repeat] = $ans2_image
      pos = (-100, -120)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans3
      image [set every repeat] = $ans3_image
      pos = (100, -120)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans4
      image [set every repeat] = $ans4_image
      pos = (300, -120)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans5
      image [set every repeat] = $ans5_image
      pos = (-300, -250)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans6
      image [set every repeat] = $ans6_image
      pos = (-100, -250)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans7
      image [set every repeat] = $ans7_image
      pos = (100, -250)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans8
      image [set every repeat] = $ans8_image
      pos = (300, -250)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent item_number
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      pos = (-.3, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $item_n
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    MouseComponent mouse
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = True
      Each Frame:
        if loop_timer.getTime() > 600:
            continueRoutine = False
            trials.finished = True
  Routine end_exp
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        That is the end of the experiment!

        This window will close automatically...
    CodeComponent code_3
      Code Type = JS
      Begin JS Routine:
        // Disable saving results to Pavlovia
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS.experiment._experimentName + '_' + util.toString(expInfo["participant"]) + '.csv';

        // Extract and convert data to CSV
        let dataObj = psychoJS.experiment._trialsData;
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => { return Object.values(it).toString() }).join('\n');

        // Trigger download
        let link = document.createElement('a');
        link.setAttribute('href', 'data:text/csv;charset=utf-8,' + encodeURI(data));
        link.setAttribute('download', filename);
        link.style.display = 'none';
        document.body.appendChild(link);
        link.click();
        document.body.removeChild(link);
  Routine welcome
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    TextComponent text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        On this task, you will have to generate solutions to problems.

        On each trial, you see a 3 x 3 pattern. The bottom-right piece to the pattern will be missing.

        Your task is to select from a set of possible options the piece that best completes the pattern.

        We will start with a couple practice items.

        Click the mouse to continue.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine practice2
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    ImageComponent matrix_2
      image = picB.bmp
      pos = (0, 200)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_2
      image = picBresp.bmp
      pos = (0, -200)
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_3
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine practice2_ans
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    ImageComponent matrix_3
      image = picB.bmp
      pos = (0, 320)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_3
      image = picBresp.bmp
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_4
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.02
      pos = (0, -.30)
      startVal [time (s)] = 0.0
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      text:
        Number 3 was the correct answer because that is the only one that fits the pattern.

        Do you have any questions?

        Please click the mouse to continue.
  Routine practice1_2
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    ImageComponent matrix_4
      image = picA.bmp
      pos = (0, 200)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_4
      image = picAresp.bmp
      pos = (0, -200)
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_5
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine practice1
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    ImageComponent matrix_5
      image = picA.bmp
      pos = (0, 200)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_5
      image = picAresp.bmp
      pos = (0, -200)
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_6
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine practice1_ans
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    ImageComponent matrix_6
      image = picA.bmp
      pos = (0, 320)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_6
      draggable = True
      image = picAresp.bmp
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_7
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = black
      letterHeight = 0.02
      pos = (0, -.30)
      startVal [time (s)] = 0.0
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      text:
        Numbers 4, 6, and 7 cannot be the correct pieces, because they only show a single circle.

        Numbers 1, 3, and 5 cannot be correct because even though they show multiple circles, they still don\'t show enough.

        Finally, number 2 cannot be correct because it actually shows too many circles.

        So, the correct answer must be 8. Does that make sense?

        Please click the mouse to continue.
  Routine practice3_ans
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    ImageComponent matrix_7
      image = picC.bmp
      pos = (0, 320)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_7
      image = picCresp.bmp
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_8
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.02
      pos = (0, -.30)
      startVal [time (s)] = 0.0
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      text:
        Number 2 was correct because that is the only one that fits the pattern.

        It allows the crosses to keep getting bigger going across the bottom row, and it allows the crosses to keep getting bigger going down the right-hand column.

        Do you have any questions?

        Please click the mouse to continue.
  Routine practice3
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    ImageComponent matrix_8
      image = picC.bmp
      pos = (0, 200)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_8
      image = picCresp.bmp
      pos = (0, -200)
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_9
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine start_real
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    TextComponent text_6
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        You will find the problems in this set slowly get more difficult.

        In every problem you should use the same method of working. Look along each row and decide what the missing figure is like.

        Look down each column and decide again, and choose the piece you find that is right in both ways.

        When you have found it, click on the answer using the mouse.

        You have 10 minutes to complete 18 problems. You may not get to all the problems, so complete as many as possible.

        Your accuracy is what matters most. Do you have any questions? If so, ask the experimenter now.

        If not, please click the mouse to continue.
    MouseComponent mouse_10
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        loop_timer = core.Clock()
  Routine gk_trial
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    TextComponent text_7
      color = black
      letterHeight = 0.04
      pos = (0, .2)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $question
    TextComponent ans1_text_2
      color = black
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt1
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    TextComponent ans2_text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt2
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    TextComponent ans3_text_2
      color = black
      letterHeight = 0.03
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt3
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    TextComponent ans4_text_2
      color = black
      letterHeight = 0.03
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt4
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    MouseComponent mouse_11
      clickable = ans1_text_2, ans2_text_2, ans3_text_2, ans4_text_2
      correctAns = corrAns
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine syn_ant_trial
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    TextComponent text_8
      color = black
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    TextComponent text_9
      color = blue
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    TextComponent ans1_text
      color = black
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt1
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    TextComponent ans2_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt2
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    TextComponent ans3_text
      color = black
      letterHeight = 0.03
      pos = (0, -.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt3
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    TextComponent ans4_text
      color = black
      letterHeight = 0.03
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt4
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    TextComponent ans5_text
      color = black
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $opt5
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    MouseComponent mouse_12
      clickable = ans1_text, ans2_text, ans3_text, ans4_text, ans5_text
      correctAns = corrAns
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine gc_intro
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    TextComponent text_10
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        For the next set of items, there is no time limit.

        For the first 10 items, you will be given a general knowledge question.

        For the next 10 items, you will be given a word and asked to identify a SYNONYM for it.

        For the last 10 items, you will be given a word and asked to identify an ANTONYM for it.

        Press the spacebar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine practice1
  Routine practice1_ans
  Routine practice2
  Routine practice2_ans
  Routine practice3
  Routine practice3_ans
  Routine start_real
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = raven_trialList.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'matrix_image': 'pic1.bmp', 'ans1_image': '1a.bmp', 'ans2_image': '1b.bmp', 'ans3_image': '1c.bmp', 'ans4_image': '1d.bmp', 'ans5_image': '1e.bmp', 'ans6_image': '1f.bmp', 'ans7_image': '1g.bmp', 'ans8_image': '1h.bmp'},
      {'matrix_image': 'pic3.bmp', 'ans1_image': '3a.bmp', 'ans2_image': '3b.bmp', 'ans3_image': '3c.bmp', 'ans4_image': '3d.bmp', 'ans5_image': '3e.bmp', 'ans6_image': '3f.bmp', 'ans7_image': '3g.bmp', 'ans8_image': '3h.bmp'},
      {'matrix_image': 'pic5.bmp', 'ans1_image': '5a.bmp', 'ans2_image': '5b.bmp', 'ans3_image': '5c.bmp', 'ans4_image': '5d.bmp', 'ans5_image': '5e.bmp', 'ans6_image': '5f.bmp', 'ans7_image': '5g.bmp', 'ans8_image': '5h.bmp'},
      {'matrix_image': 'pic7.bmp', 'ans1_image': '7a.bmp', 'ans2_image': '7b.bmp', 'ans3_image': '7c.bmp', 'ans4_image': '7d.bmp', 'ans5_image': '7e.bmp', 'ans6_image': '7f.bmp', 'ans7_image': '7g.bmp', 'ans8_image': '7h.bmp'},
      {'matrix_image': 'pic9.bmp', 'ans1_image': '9a.bmp', 'ans2_image': '9b.bmp', 'ans3_image': '9c.bmp', 'ans4_image': '9d.bmp', 'ans5_image': '9e.bmp', 'ans6_image': '9f.bmp', 'ans7_image': '9g.bmp', 'ans8_image': '9h.bmp'},
      {'matrix_image': 'pic11.bmp', 'ans1_image': '11a.bmp', 'ans2_image': '11b.bmp', 'ans3_image': '11c.bmp', 'ans4_image': '11d.bmp', 'ans5_image': '11e.bmp', 'ans6_image': '11f.bmp', 'ans7_image': '11g.bmp', 'ans8_image': '11h.bmp'}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
    Routine trial
  LoopTerminator trials
  Routine gc_intro
  LoopInitiator gk_loop loopType="TrialHandler"
    conditionsFile = gk_questions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'question': 'Of which country is Baghdad the capital?', 'opt1': 'Iraq', 'opt2': 'Iran', 'opt3': 'Pakistan', 'opt4': 'Syria', 'corrAns': 'ans1_text_2'},
      {'question': 'What is the largest planet in the solar system?', 'opt1': 'Earth', 'opt2': 'Jupiter', 'opt3': 'Saturn', 'opt4': 'Uranus', 'corrAns': 'ans2_text_2'},
      {'question': 'Who is the author of The Canterbury Tales?', 'opt1': 'James Joyce', 'opt2': 'William Shakespeare', 'opt3': 'Dante', 'opt4': 'Geoffrey Chaucer', 'corrAns': 'ans4_text_2'},
      {'question': 'What is the name of a dried plum?', 'opt1': 'raisin', 'opt2': 'apricot', 'opt3': 'craisin', 'opt4': 'prune', 'corrAns': 'ans4_text_2'},
      {'question': 'In which sport does a rider on horseback hit a ball with their mallet?', 'opt1': 'polo', 'opt2': 'steeplechase', 'opt3': 'dressage', 'opt4': 'cricket', 'corrAns': 'ans1_text_2'},
      {'question': 'What is the name of the legendary one-eye giant in Greek mythology?', 'opt1': 'Ulysses', 'opt2': 'Cyclops', 'opt3': 'Minotaur', 'opt4': 'Cerberus', 'corrAns': 'ans2_text_2'},
      {'question': 'In what park is Old Faithful located?', 'opt1': 'Yosemite National Park', 'opt2': 'Glacier National Park', 'opt3': 'Yellowstone National Park', 'opt4': 'Zion National Park', 'corrAns': 'ans3_text_2'},
      {'question': 'What is the name of the poker hand in which all the cards are of the same suit?', 'opt1': 'Two Pair', 'opt2': 'Full House', 'opt3': 'Straight', 'opt4': 'Flush', 'corrAns': 'ans4_text_2'}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
    Routine gk_trial
  LoopTerminator gk_loop
  LoopInitiator syn_ant_loop loopType="TrialHandler"
    conditionsFile = syn_ant_questions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'question': 'Which of the following is a synonym for…', 'word': 'concur', 'ans1': 'acquiesce', 'ans2': 'extricate', 'ans3': 'divulge', 'ans4': 'concoct', 'ans5': 'ransack', 'corrAns': 'ans1'},
      {'question': 'Which of the following is a synonym for…', 'word': 'confiscate', 'ans1': 'harass', 'ans2': 'repulse', 'ans3': 'console', 'ans4': 'appropriate', 'ans5': 'congregate', 'corrAns': 'ans4'},
      {'question': 'Which of the following is a synonym for…', 'word': 'solicit', 'ans1': 'purge', 'ans2': 'spurn', 'ans3': 'entrance', 'ans4': 'exert', 'ans5': 'beseech', 'corrAns': 'ans5'},
      {'question': 'Which of the following is a synonym for…', 'word': 'furtive', 'ans1': 'ecstatic', 'ans2': 'heinous', 'ans3': 'stealthy', 'ans4': 'flimsy', 'ans5': 'facile', 'corrAns': 'ans3'},
      {'question': 'Which of the following is a synonym for…', 'word': 'astute', 'ans1': 'bizarre', 'ans2': 'ascetic', 'ans3': 'sagacious', 'ans4': 'lineal', 'ans5': 'irritable', 'corrAns': 'ans3'},
      {'question': 'Which of the following is a synonym for…', 'word': 'covet', 'ans1': 'crave', 'ans2': 'claim', 'ans3': 'avenge', 'ans4': 'clutch', 'ans5': 'comply', 'corrAns': 'ans1'},
      {'question': 'Which of the following is a synonym for…', 'word': 'oscillate', 'ans1': 'premeditate', 'ans2': 'irradiate', 'ans3': 'vacillate', 'ans4': 'recapitulate', 'ans5': 'furbish', 'corrAns': 'ans3'}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
    Routine syn_ant_trial
  LoopTerminator syn_ant_loop
  Routine end_exp
