PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920,1080]
  color = white
  expName = Raven
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine trial
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    ImageComponent matrix
      image [set every repeat] = $matrix_image
      pos = (0, 200)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1
      image [set every repeat] = $ans1_image
      pos = (-300, -120)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans2
      image [set every repeat] = $ans2_image
      pos = (-100, -120)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans3
      image [set every repeat] = $ans3_image
      pos = (100, -120)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans4
      image [set every repeat] = $ans4_image
      pos = (300, -120)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans5
      image [set every repeat] = $ans5_image
      pos = (-300, -250)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans6
      image [set every repeat] = $ans6_image
      pos = (-100, -250)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans7
      image [set every repeat] = $ans7_image
      pos = (100, -250)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans8
      image [set every repeat] = $ans8_image
      pos = (300, -250)
      size = (170, 120)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent item_number
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      pos = (-.3, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $item_n
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    MouseComponent mouse
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = True
      Each Frame:
        if loop_timer.getTime() > 600:
            continueRoutine = False
            trials.finished = True
  Routine end_exp
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        That is the end of the experiment!

        This window will close automatically...
  Routine welcome
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    TextComponent text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        On this task, you will have to generate solutions to problems.

        On each trial, you see a 3 x 3 pattern. The bottom-right piece to the pattern will be missing.

        Your task is to select from a set of possible options the piece that best completes the pattern.

        We will start with a couple practice items.

        Click the mouse to continue.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine practice2
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    ImageComponent matrix_2
      image = picB.bmp
      pos = (0, 200)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_2
      image = picBresp.bmp
      pos = (0, -200)
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_3
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine practice2_ans
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    ImageComponent matrix_3
      image = picB.bmp
      pos = (0, 320)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_3
      image = picBresp.bmp
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_4
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.02
      pos = (0, -.30)
      startVal [time (s)] = 0.0
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      text:
        Number 3 was the correct answer because that is the only one that fits the pattern.

        Do you have any questions?

        Please click the mouse to continue.
  Routine practice1_2
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    ImageComponent matrix_4
      image = picA.bmp
      pos = (0, 200)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_4
      image = picAresp.bmp
      pos = (0, -200)
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_5
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine practice1
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    ImageComponent matrix_5
      image = picA.bmp
      pos = (0, 200)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_5
      image = picAresp.bmp
      pos = (0, -200)
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_6
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine practice1_ans
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    ImageComponent matrix_6
      image = picA.bmp
      pos = (0, 320)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_6
      draggable = True
      image = picAresp.bmp
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_7
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = black
      letterHeight = 0.02
      pos = (0, -.30)
      startVal [time (s)] = 0.0
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      text:
        Numbers 4, 6, and 7 cannot be the correct pieces, because they only show a single circle.

        Numbers 1, 3, and 5 cannot be correct because even though they show multiple circles, they still don\'t show enough.

        Finally, number 2 cannot be correct because it actually shows too many circles.

        So, the correct answer must be 8. Does that make sense?

        Please click the mouse to continue.
  Routine practice3_ans
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    ImageComponent matrix_7
      image = picC.bmp
      pos = (0, 320)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_7
      image = picCresp.bmp
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_8
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.02
      pos = (0, -.30)
      startVal [time (s)] = 0.0
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      text:
        Number 2 was correct because that is the only one that fits the pattern.

        It allows the crosses to keep getting bigger going across the bottom row, and it allows the crosses to keep getting bigger going down the right-hand column.

        Do you have any questions?

        Please click the mouse to continue.
  Routine practice3
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    ImageComponent matrix_8
      image = picC.bmp
      pos = (0, 200)
      size = (540, 360)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent ans1_8
      image = picCresp.bmp
      pos = (0, -200)
      size = (805, 320)
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent mouse_9
      clickable = ans1, ans2, ans3, ans4, ans5, ans6, ans7, ans8
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine start_real
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    TextComponent text_6
      color = black
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        You will find the problems in this set slowly get more difficult.

        In every problem you should use the same method of working. Look along each row and decide what the missing figure is like.

        Look down each column and decide again, and choose the piece you find that is right in both ways.

        When you have found it, click on the answer using the mouse.

        You have 10 minutes to complete 18 problems. You may not get to all the problems, so complete as many as possible.

        Your accuracy is what matters most. Do you have any questions? If so, ask the experimenter now.

        If not, please click the mouse to continue.
    MouseComponent mouse_10
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Routine:
        loop_timer = core.Clock()
Flow
  Routine welcome
  Routine practice1
  Routine practice1_ans
  Routine practice2
  Routine practice2_ans
  Routine practice3
  Routine practice3_ans
  Routine start_real
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = raven_trialList.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'matrix_image': 'pic1.bmp', 'ans1_image': '1a.bmp', 'ans2_image': '1b.bmp', 'ans3_image': '1c.bmp', 'ans4_image': '1d.bmp', 'ans5_image': '1e.bmp', 'ans6_image': '1f.bmp', 'ans7_image': '1g.bmp', 'ans8_image': '1h.bmp'},
      {'matrix_image': 'pic3.bmp', 'ans1_image': '3a.bmp', 'ans2_image': '3b.bmp', 'ans3_image': '3c.bmp', 'ans4_image': '3d.bmp', 'ans5_image': '3e.bmp', 'ans6_image': '3f.bmp', 'ans7_image': '3g.bmp', 'ans8_image': '3h.bmp'},
      {'matrix_image': 'pic5.bmp', 'ans1_image': '5a.bmp', 'ans2_image': '5b.bmp', 'ans3_image': '5c.bmp', 'ans4_image': '5d.bmp', 'ans5_image': '5e.bmp', 'ans6_image': '5f.bmp', 'ans7_image': '5g.bmp', 'ans8_image': '5h.bmp'},
      {'matrix_image': 'pic7.bmp', 'ans1_image': '7a.bmp', 'ans2_image': '7b.bmp', 'ans3_image': '7c.bmp', 'ans4_image': '7d.bmp', 'ans5_image': '7e.bmp', 'ans6_image': '7f.bmp', 'ans7_image': '7g.bmp', 'ans8_image': '7h.bmp'},
      {'matrix_image': 'pic9.bmp', 'ans1_image': '9a.bmp', 'ans2_image': '9b.bmp', 'ans3_image': '9c.bmp', 'ans4_image': '9d.bmp', 'ans5_image': '9e.bmp', 'ans6_image': '9f.bmp', 'ans7_image': '9g.bmp', 'ans8_image': '9h.bmp'},
      {'matrix_image': 'pic11.bmp', 'ans1_image': '11a.bmp', 'ans2_image': '11b.bmp', 'ans3_image': '11c.bmp', 'ans4_image': '11d.bmp', 'ans5_image': '11e.bmp', 'ans6_image': '11f.bmp', 'ans7_image': '11g.bmp', 'ans8_image': '11h.bmp'}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
    Routine trial
  LoopTerminator trials
  Routine end_exp
